<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:bv="clr-namespace:BonVision;assembly=BonVision"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="WorkflowInput">
        <Name>Source1</Name>
      </Expression>
      <Expression xsi:type="rx:SelectMany">
        <Name>DrawReward</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsBaited</Name>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarvestAction</Name>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Amount</Selector>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Value" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="bv:OptionalFloatProperty">
                <bv:Value>0.5</bv:Value>
                <bv:HasValue>true</bv:HasValue>
              </Combinator>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>IsBaited</Name>
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>HarvestAction</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:CombineLatest" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="IncludeWorkflow" Path="Extensions\CalculateReward.bonsai" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="5" Label="Source1" />
            <Edge From="2" To="3" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source2" />
            <Edge From="5" To="13" Label="Source1" />
            <Edge From="6" To="7" Label="Source1" />
            <Edge From="7" To="8" Label="Source1" />
            <Edge From="8" To="10" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="11" To="12" Label="Source1" />
            <Edge From="12" To="13" Label="Source2" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="WorkflowOutput" />
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>