<?xml version="1.0" encoding="utf-8"?>
<WorkflowBuilder Version="2.8.1"
                 xmlns:xsi="http://www.w3.org/2001/XMLSchema-instance"
                 xmlns:rx="clr-namespace:Bonsai.Reactive;assembly=Bonsai.Core"
                 xmlns:harp="clr-namespace:Bonsai.Harp;assembly=Bonsai.Harp"
                 xmlns:p1="clr-namespace:Harp.LoadCells;assembly=Harp.LoadCells"
                 xmlns:sys="clr-namespace:System;assembly=mscorlib"
                 xmlns:dsp="clr-namespace:Bonsai.Dsp;assembly=Bonsai.Dsp"
                 xmlns:scr="clr-namespace:Bonsai.Scripting.Expressions;assembly=Bonsai.Scripting.Expressions"
                 xmlns="https://bonsai-rx.org/2018/workflow">
  <Workflow>
    <Nodes>
      <Expression xsi:type="rx:BehaviorSubject" TypeArguments="harp:HarpMessage">
        <rx:Name>HarpLoadCellsCommands</rx:Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="p1:Device">
          <harp:OperationMode>Active</harp:OperationMode>
          <harp:OperationLed>On</harp:OperationLed>
          <harp:DumpRegisters>true</harp:DumpRegisters>
          <harp:VisualIndicators>On</harp:VisualIndicators>
          <harp:Heartbeat>Enabled</harp:Heartbeat>
          <harp:IgnoreErrors>false</harp:IgnoreErrors>
          <harp:PortName>COM4</harp:PortName>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:PublishSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateEnableEventsPayload">
          <p1:EnableEvents>LoadCellData DigitalInput SyncOutput Thresholds</p1:EnableEvents>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpLoadCellsCommands</Name>
      </Expression>
      <Expression xsi:type="p1:CreateMessage">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Payload xsi:type="p1:CreateAcquisitionStatePayload">
          <p1:AcquisitionState>Enabled</p1:AcquisitionState>
        </harp:Payload>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpLoadCellsCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Range">
          <rx:Start>0</rx:Start>
          <rx:Count>8</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:CreateObservable">
        <Name>CalibrateLoadCellOffset</Name>
        <Workflow>
          <Nodes>
            <Expression xsi:type="WorkflowInput">
              <Name>Source1</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>LoadCellIndex</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoadCellIndex</Name>
            </Expression>
            <Expression xsi:type="Add">
              <Operand xsi:type="IntProperty">
                <Value>48</Value>
              </Operand>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>OffsetAddress</Name>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject" TypeArguments="sys:Int32">
              <rx:Name>WriteOffset</rx:Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>OffsetAddress</Name>
            </Expression>
            <Expression xsi:type="PropertyMapping">
              <PropertyMappings>
                <Property Name="Address" />
              </PropertyMappings>
            </Expression>
            <Expression xsi:type="harp:Format">
              <harp:MessageType>Write</harp:MessageType>
              <harp:Register xsi:type="harp:FormatMessagePayload">
                <harp:Address>55</harp:Address>
                <harp:PayloadType>S16</harp:PayloadType>
              </harp:Register>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>HarpLoadCellsCommands</Name>
            </Expression>
            <Expression xsi:type="ExternalizedMapping">
              <Property Name="Value" DisplayName="BufferSize" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>100</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:AsyncSubject">
              <Name>BufferSize</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>0</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentOffset</Name>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentOffset</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>AcquireOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput" TypeArguments="sys:Int32">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="rx:AsyncSubject">
                    <Name>ThisOffset</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisOffset</Name>
                  </Expression>
                  <Expression xsi:type="MulticastSubject">
                    <Name>WriteOffset</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpLoadCellsEvents</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="harp:FilterMessageType">
                      <harp:FilterType>Include</harp:FilterType>
                      <harp:MessageType>Write</harp:MessageType>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OffsetAddress</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Address" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:Address>55</harp:Address>
                      <harp:PayloadType>S16</harp:PayloadType>
                      <harp:IsArray>false</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="rx:BehaviorSubject">
                    <Name>OffsetSet</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>ThisOffset</Name>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>HarpLoadCellsEvents</Name>
                  </Expression>
                  <Expression xsi:type="p1:FilterRegister">
                    <harp:FilterType>Include</harp:FilterType>
                    <harp:Register xsi:type="p1:LoadCellData" />
                  </Expression>
                  <Expression xsi:type="harp:Parse">
                    <harp:Register xsi:type="harp:ParseMessagePayload">
                      <harp:PayloadType>S16</harp:PayloadType>
                      <harp:IsArray>true</harp:IsArray>
                    </harp:Register>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>LoadCellIndex</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Index">
                    <Operand xsi:type="IntProperty">
                      <Value>7</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BufferSize</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Count" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>100</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Sum" />
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>BufferSize</Name>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Divide">
                    <Operand xsi:type="IntProperty">
                      <Value>100</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>OffsetSet</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:SubscribeWhen" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="9" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                  <Edge From="8" To="9" Label="Source2" />
                  <Edge From="9" To="10" Label="Source1" />
                  <Edge From="11" To="27" Label="Source1" />
                  <Edge From="12" To="13" Label="Source1" />
                  <Edge From="13" To="14" Label="Source1" />
                  <Edge From="14" To="17" Label="Source1" />
                  <Edge From="15" To="16" Label="Source1" />
                  <Edge From="16" To="17" Label="Source2" />
                  <Edge From="17" To="20" Label="Source1" />
                  <Edge From="18" To="19" Label="Source1" />
                  <Edge From="19" To="20" Label="Source2" />
                  <Edge From="20" To="21" Label="Source1" />
                  <Edge From="21" To="24" Label="Source1" />
                  <Edge From="22" To="23" Label="Source1" />
                  <Edge From="23" To="24" Label="Source2" />
                  <Edge From="24" To="26" Label="Source1" />
                  <Edge From="25" To="26" Label="Source2" />
                  <Edge From="26" To="27" Label="Source2" />
                  <Edge From="27" To="28" Label="Source1" />
                  <Edge From="28" To="29" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentOptimum</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>BetterThanLast?</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1</Selector>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentOptimum</Name>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Offset++</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>CurrentOffset</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IncrementOffset</Name>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it? 1.0 : -1.0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="PropertyMapping">
                    <PropertyMappings>
                      <Property Name="Value" />
                    </PropertyMappings>
                  </Expression>
                  <Expression xsi:type="Add">
                    <Operand xsi:type="IntProperty">
                      <Value>1</Value>
                    </Operand>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="5" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentOffset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:Condition">
              <Name>WorseThanLast</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item1.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="MemberSelector">
                    <Selector>Item2.Item2</Selector>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="dsp:Abs" />
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Zip" />
                  </Expression>
                  <Expression xsi:type="LessThan" />
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="0" To="3" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="5" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                  <Edge From="4" To="5" Label="Source2" />
                  <Edge From="5" To="6" Label="Source1" />
                  <Edge From="6" To="7" Label="Source1" />
                  <Edge From="7" To="8" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>!IncrementOffset</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IncrementOffset</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="BitwiseNot" />
                  <Expression xsi:type="MulticastSubject">
                    <Name>IncrementOffset</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                  <Edge From="3" To="4" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="rx:SelectMany">
              <Name>Offset++</Name>
              <Workflow>
                <Nodes>
                  <Expression xsi:type="SubscribeSubject">
                    <Name>IncrementOffset</Name>
                  </Expression>
                  <Expression xsi:type="Combinator">
                    <Combinator xsi:type="rx:Take">
                      <rx:Count>1</rx:Count>
                    </Combinator>
                  </Expression>
                  <Expression xsi:type="scr:ExpressionTransform">
                    <scr:Expression>it? 1.0 : -1.0</scr:Expression>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                  <Edge From="1" To="2" Label="Source1" />
                  <Edge From="2" To="3" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="MulticastSubject">
              <Name>CurrentOffset</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>2</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Last" />
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>false</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Merge" />
            </Expression>
            <Expression xsi:type="BitwiseNot" />
            <Expression xsi:type="rx:Condition">
              <Workflow>
                <Nodes>
                  <Expression xsi:type="WorkflowInput">
                    <Name>Source1</Name>
                  </Expression>
                  <Expression xsi:type="WorkflowOutput" />
                </Nodes>
                <Edges>
                  <Edge From="0" To="1" Label="Source1" />
                </Edges>
              </Workflow>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>CurrentOptimum</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:WithLatestFrom" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item2</Selector>
            </Expression>
            <Expression xsi:type="SubscribeSubject">
              <Name>LoadCellIndex</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="MemberSelector">
              <Selector>Item1.Item1,Item1.Item2,Item2</Selector>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Take">
                <rx:Count>1</rx:Count>
              </Combinator>
            </Expression>
            <Expression xsi:type="WorkflowOutput" />
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>-1000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="IntProperty">
                <Value>100000</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="rx:Zip" />
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>CurrentOptimum</Name>
            </Expression>
            <Expression xsi:type="Combinator">
              <Combinator xsi:type="BooleanProperty">
                <Value>true</Value>
              </Combinator>
            </Expression>
            <Expression xsi:type="rx:BehaviorSubject">
              <Name>IncrementOffset</Name>
            </Expression>
          </Nodes>
          <Edges>
            <Edge From="0" To="1" Label="Source1" />
            <Edge From="1" To="2" Label="Source1" />
            <Edge From="3" To="4" Label="Source1" />
            <Edge From="4" To="5" Label="Source1" />
            <Edge From="5" To="6" Label="Source1" />
            <Edge From="7" To="10" Label="Source1" />
            <Edge From="8" To="9" Label="Source1" />
            <Edge From="9" To="10" Label="Source2" />
            <Edge From="10" To="11" Label="Source1" />
            <Edge From="12" To="13" Label="Source1" />
            <Edge From="13" To="14" Label="Source1" />
            <Edge From="14" To="15" Label="Source1" />
            <Edge From="16" To="17" Label="Source1" />
            <Edge From="18" To="19" Label="Source1" />
            <Edge From="19" To="21" Label="Source1" />
            <Edge From="20" To="21" Label="Source2" />
            <Edge From="21" To="22" Label="Source1" />
            <Edge From="21" To="28" Label="Source1" />
            <Edge From="22" To="23" Label="Source1" />
            <Edge From="23" To="24" Label="Source1" />
            <Edge From="24" To="25" Label="Source1" />
            <Edge From="25" To="26" Label="Source1" />
            <Edge From="26" To="27" Label="Source1" />
            <Edge From="27" To="36" Label="Source1" />
            <Edge From="28" To="29" Label="Source1" />
            <Edge From="29" To="30" Label="Source1" />
            <Edge From="30" To="31" Label="Source1" />
            <Edge From="31" To="32" Label="Source1" />
            <Edge From="32" To="33" Label="Source1" />
            <Edge From="33" To="34" Label="Source1" />
            <Edge From="34" To="35" Label="Source1" />
            <Edge From="35" To="36" Label="Source2" />
            <Edge From="36" To="37" Label="Source1" />
            <Edge From="37" To="38" Label="Source1" />
            <Edge From="38" To="40" Label="Source1" />
            <Edge From="39" To="40" Label="Source2" />
            <Edge From="40" To="41" Label="Source1" />
            <Edge From="41" To="43" Label="Source1" />
            <Edge From="42" To="43" Label="Source2" />
            <Edge From="43" To="44" Label="Source1" />
            <Edge From="44" To="45" Label="Source1" />
            <Edge From="45" To="46" Label="Source1" />
            <Edge From="47" To="49" Label="Source1" />
            <Edge From="48" To="49" Label="Source2" />
            <Edge From="49" To="50" Label="Source1" />
            <Edge From="51" To="52" Label="Source1" />
          </Edges>
        </Workflow>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Concat" />
      </Expression>
      <Expression xsi:type="scr:ExpressionTransform">
        <scr:Expression>new(Item1 as Offset, Item2 as Baseline, Item3 as LoadCellIndex)</scr:Expression>
      </Expression>
      <Expression xsi:type="rx:ToDictionary">
        <rx:KeySelector>LoadCellIndex</rx:KeySelector>
        <rx:ElementSelector />
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>CalibrationData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpLoadCellsCommands</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>HarpLoadCellsEvents</Name>
      </Expression>
      <Expression xsi:type="p1:FilterRegister">
        <harp:FilterType>Include</harp:FilterType>
        <harp:Register xsi:type="p1:LoadCellData" />
      </Expression>
      <Expression xsi:type="harp:Parse">
        <harp:Register xsi:type="harp:ParseMessagePayload">
          <harp:PayloadType>S16</harp:PayloadType>
          <harp:IsArray>true</harp:IsArray>
        </harp:Register>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LoadCellIndex</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CalibrationData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LoadCellIndex</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Baseline</Selector>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Subtract">
        <Operand xsi:type="WorkflowProperty" TypeArguments="sys:Int16">
          <Value>-481</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CalibrationData</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:SubscribeWhen" />
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>CalibrationData</Name>
      </Expression>
      <Expression xsi:type="SubscribeSubject">
        <Name>LoadCellIndex</Name>
      </Expression>
      <Expression xsi:type="PropertyMapping">
        <PropertyMappings>
          <Property Name="Value" />
        </PropertyMappings>
      </Expression>
      <Expression xsi:type="Index">
        <Operand xsi:type="IntProperty">
          <Value>0</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>LoadCellIndex</Selector>
      </Expression>
      <Expression xsi:type="Add">
        <Operand xsi:type="IntProperty">
          <Value>48</Value>
        </Operand>
      </Expression>
      <Expression xsi:type="MemberSelector">
        <Selector>Offset</Selector>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Zip" />
      </Expression>
      <Expression xsi:type="InputMapping">
        <PropertyMappings>
          <Property Name="Address" Selector="Item1" />
        </PropertyMappings>
        <Selector>Item2</Selector>
      </Expression>
      <Expression xsi:type="harp:Format">
        <harp:MessageType>Write</harp:MessageType>
        <harp:Register xsi:type="harp:FormatMessagePayload">
          <harp:Address>48</harp:Address>
          <harp:PayloadType>S16</harp:PayloadType>
        </harp:Register>
      </Expression>
      <Expression xsi:type="MulticastSubject">
        <Name>HarpLoadCellsCommands</Name>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="IntProperty">
          <Value>0</Value>
        </Combinator>
      </Expression>
      <Expression xsi:type="Combinator">
        <Combinator xsi:type="rx:Take">
          <rx:Count>1</rx:Count>
        </Combinator>
      </Expression>
      <Expression xsi:type="rx:AsyncSubject">
        <Name>LoadCellIndex</Name>
      </Expression>
    </Nodes>
    <Edges>
      <Edge From="0" To="1" Label="Source1" />
      <Edge From="1" To="2" Label="Source1" />
      <Edge From="3" To="4" Label="Source1" />
      <Edge From="4" To="5" Label="Source1" />
      <Edge From="5" To="6" Label="Source1" />
      <Edge From="6" To="7" Label="Source1" />
      <Edge From="7" To="8" Label="Source1" />
      <Edge From="9" To="10" Label="Source1" />
      <Edge From="10" To="11" Label="Source1" />
      <Edge From="11" To="12" Label="Source1" />
      <Edge From="12" To="13" Label="Source1" />
      <Edge From="13" To="14" Label="Source1" />
      <Edge From="16" To="17" Label="Source1" />
      <Edge From="17" To="18" Label="Source1" />
      <Edge From="18" To="21" Label="Source1" />
      <Edge From="19" To="20" Label="Source1" />
      <Edge From="20" To="21" Label="Source2" />
      <Edge From="21" To="28" Label="Source1" />
      <Edge From="22" To="25" Label="Source1" />
      <Edge From="23" To="24" Label="Source1" />
      <Edge From="24" To="25" Label="Source2" />
      <Edge From="25" To="26" Label="Source1" />
      <Edge From="26" To="27" Label="Source1" />
      <Edge From="27" To="28" Label="Source2" />
      <Edge From="28" To="30" Label="Source1" />
      <Edge From="29" To="30" Label="Source2" />
      <Edge From="31" To="34" Label="Source1" />
      <Edge From="32" To="33" Label="Source1" />
      <Edge From="33" To="34" Label="Source2" />
      <Edge From="34" To="35" Label="Source1" />
      <Edge From="34" To="37" Label="Source1" />
      <Edge From="35" To="36" Label="Source1" />
      <Edge From="36" To="38" Label="Source1" />
      <Edge From="37" To="38" Label="Source2" />
      <Edge From="38" To="39" Label="Source1" />
      <Edge From="39" To="40" Label="Source1" />
      <Edge From="40" To="41" Label="Source1" />
      <Edge From="42" To="43" Label="Source1" />
      <Edge From="43" To="44" Label="Source1" />
    </Edges>
  </Workflow>
</WorkflowBuilder>