WorkflowBuilder(Version=2.8.5)
ExternalizedMapping(TaskLogicPath, RigPath, SessionPath)
-> IncludeWorkflow(Path=AllenNeuralDynamics.Core:ReadSchemas.bonsai, TaskLogicPath="", RigPath="", SessionPath="")

GroupWorkflow LoadSchemas
    SubscribeSubject RawSessionSchema
    -> AindForceForagingDataSchema.Session.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.Session.AindBehaviorSessionModel>)
    -> Take(Count=1)
    -> AsyncSubject SubjectSchema

    SubscribeSubject RawRigSchema
    -> AindForceForagingDataSchema.Rig.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.Rig.AindForceForagingRig>)
    -> Take(Count=1)
    -> AsyncSubject RigSchema

    SubscribeSubject RawTaskLogicSchema
    -> AindForceForagingDataSchema.TaskLogic.DeserializeFromJson(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.AindForceForagingTaskLogic>)
    -> Take(Count=1)
    -> AsyncSubject TaskLogicSchema
    -> MemberSelector(Selector=TaskParameters)
    -> AsyncSubject TaskLogicParameters

Annotation(Text="")
-> GroupWorkflow Hardware
    SubscribeSubject HarpLoadCellsEvents
    -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
    -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
    -> BehaviorSubject HarpTimestampSource

    GroupWorkflow ScreenConfiguration
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen)
        -> PropertyMapping(DisplayDevice(Selector=DisplayIndex), TargetRenderFrequency(Selector=TargetRenderFrequency), TargetUpdateFrequency(Selector=TargetUpdateFrequency))
        -> Bonsai.Shaders.CreateWindow
          Width=1000
          Height=1000
          Title=ForceForaging
          VSync=Off
          SwapSync=false
          ClearColor=Black
          ClearMask="DepthBufferBit ColorBufferBit"
          CursorVisible=false
          Location=nil
          WindowBorder=Resizable
          WindowState=Minimized
          DisplayDevice=Second
          TargetRenderFrequency=60
          TargetUpdateFrequency=120
          RenderState=""
          GraphicsMode
            ColorFormat(Red=8, Green=8, Blue=8, Alpha=8)
            Depth=16
            Stencil=0
            Samples=0
            AccumulatorFormat(Red=0, Green=0, Blue=0, Alpha=0)
            Buffers=2
            Stereo=false
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderResources.bonsai)
        -> Bonsai.Resources.LoadResources
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.CalibrationDirectory)
        -> PropertyMapping(Directory)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadDisplayCalibration.bonsai, Directory=Calibration\Monitors)
        -> Take(Count=1)
        -> AsyncSubject ScreenCalibration

        GroupWorkflow RenderLoop
            SubscribeSubject FarClipHorizon
            -> PropertyMapping(FarClip)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:RenderLoop.bonsai, Eye(X=0, Y=0, Z=0), NearClip=1E-05, FarClip=1000, Light(X=0, Y=0, Z=0))

            IncludeWorkflow(Path=AllenNeuralDynamics.Core:DisplaySynchQuad.bonsai, Minimum=2, Maximum=6)

            FloatProperty(Value=1)
            -> Take(Count=1)
            -> BehaviorSubject WorldContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Contrast) => #9
            SubscribeSubject WorldContrast => #10
            #9, #10 -> CombineLatest
            -> Multiply
            -> MulticastSubject DisplayContrast

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Screen)
            -> MemberSelector(Selector=Brightness)
            -> MulticastSubject DisplayBrightness

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
        -> PropertyMapping(Path)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LoadTextureBank.bonsai, Path=Textures, SearchPattern=*.jpg)
    -> DelaySubscription(DueTime=PT2S)

    GroupWorkflow HarpDevices
        GroupWorkflow HarpLoadCellsDevice
            BehaviorSubject<Bonsai.Harp.HarpMessage> HarpLoadCellsCommands => #0
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=HarpLoadCells.PortName)
            -> PropertyMapping(PortName) => #3
            #0, #3 -> Harp.LoadCells.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Disabled, IgnoreErrors=false, PortName=COMx)
            -> PublishSubject HarpLoadCellsEvents

            SubscribeSubject HarpLoadCellsEvents
            -> Take(Count=1)
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateEnableEventsPayload(EnableEvents=LoadCellData))
            -> MulticastSubject HarpLoadCellsCommands
            -> Harp.LoadCells.CreateMessage(MessageType=Write, Payload=Harp.LoadCells.CreateAcquisitionStatePayload(AcquisitionState=Enabled))
            -> MulticastSubject HarpLoadCellsCommands

            ExternalizedMapping(Name(DisplayName=StartExperimentSubjectName))
            -> SubscribeSubject StartExperiment => #13
            Annotation ForceRegisterDump(Text="") => #14
            #13, #14 -> Bonsai.Harp.CreateMessage
              MessageType=Write
              Payload=Bonsai.Harp.CreateOperationControlPayload(OperationMode=Active, DumpRegisters=true, MuteReplies=false, VisualIndicators=On, OperationLed=Off, Heartbeat=Enabled)
            -> Take(Count=1)
            -> MulticastSubject HarpLoadCellsCommands

            BehaviorSubject<System.Reactive.Unit> CalibrateLoadCells
            -> SelectMany CalibrateLoadCells
                SubscribeSubject TaskLogicParameters => #0
                -> MemberSelector(Selector=OperationControl.Force.LeftIndex) => #1
                #0 -> MemberSelector(Selector=OperationControl.Force.RightIndex) => #2
                #1, #2 -> Merge
                -> CreateObservable CalibrateLoadCellOffset
                    WorkflowInput Source1
                    -> Take(Count=1)
                    -> AsyncSubject LoadCellIndex

                    SubscribeSubject LoadCellIndex
                    -> Add(Operand=IntProperty(Value=48))
                    -> Take(Count=1)
                    -> AsyncSubject OffsetAddress

                    BehaviorSubject<System.Int32> WriteOffset => #7
                    SubscribeSubject OffsetAddress
                    -> PropertyMapping(Address) => #9
                    #7, #9 -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=55, PayloadType=S16))
                    -> MulticastSubject HarpLoadCellsCommands

                    ExternalizedMapping(Value(DisplayName=BufferSize))
                    -> IntProperty(Value=100)
                    -> Take(Count=1)
                    -> AsyncSubject BufferSize

                    IntProperty(Value=0)
                    -> BehaviorSubject CurrentOffset

                    SubscribeSubject CurrentOffset
                    -> SelectMany AcquireOffset => #19
                        WorkflowInput<System.Int32> Source1
                        -> Take(Count=1)
                        -> AsyncSubject ThisOffset

                        SubscribeSubject ThisOffset
                        -> MulticastSubject WriteOffset

                        SubscribeSubject HarpLoadCellsEvents
                        -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Write) => #6
                        SubscribeSubject OffsetAddress
                        -> PropertyMapping(Address) => #8
                        #6, #8 -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(Address=55, PayloadType=S16, IsArray=false))
                        -> BehaviorSubject OffsetSet

                        SubscribeSubject ThisOffset => #11
                        SubscribeSubject HarpLoadCellsEvents
                        -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
                        -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=S16, IsArray=true)) => #14
                        SubscribeSubject LoadCellIndex
                        -> PropertyMapping(Value) => #16
                        #14, #16 -> Index(Operand=IntProperty(Value=7)) => #17
                        SubscribeSubject BufferSize
                        -> PropertyMapping(Count) => #19
                        #17, #19 -> Take(Count=100)
                        -> Sum => #21
                        SubscribeSubject BufferSize
                        -> PropertyMapping(Value) => #23
                        #21, #23 -> Divide(Operand=IntProperty(Value=100)) => #24
                        SubscribeSubject OffsetSet => #25
                        #24, #25 -> SubscribeWhen => #26
                        #11, #26 -> Zip
                        -> Take(Count=1)
                        -> WorkflowOutput
                    SubscribeSubject CurrentOptimum => #20
                    #19, #20 -> WithLatestFrom => #21
                    -> Condition BetterThanLast?
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Item1.Item2)
                        -> Bonsai.Dsp.Abs => #2
                        #0 -> MemberSelector(Selector=Item2.Item2)
                        -> Bonsai.Dsp.Abs => #4
                        #2, #4 -> Zip
                        -> LessThan
                        -> WorkflowOutput
                    -> MemberSelector(Selector=Item1)
                    -> MulticastSubject CurrentOptimum
                    -> SelectMany Offset++
                        SubscribeSubject CurrentOffset
                        -> Take(Count=1) => #1
                        SubscribeSubject IncrementOffset
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it? 1.0 : -1.0
                        -> PropertyMapping(Value) => #4
                        #1, #4 -> Add(Operand=IntProperty(Value=1))
                        -> WorkflowOutput
                    -> MulticastSubject CurrentOffset
                    -> BooleanProperty(Value=true) => #27
                    #21 -> Condition WorseThanLast
                        WorkflowInput Source1 => #0
                        -> MemberSelector(Selector=Item1.Item2)
                        -> Bonsai.Dsp.Abs => #2
                        #0 -> MemberSelector(Selector=Item2.Item2)
                        -> Bonsai.Dsp.Abs => #4
                        #2, #4 -> Zip
                        -> LessThan
                        -> BitwiseNot
                        -> WorkflowOutput
                    -> BooleanProperty(Value=false)
                    -> SelectMany !IncrementOffset
                        SubscribeSubject IncrementOffset
                        -> Take(Count=1)
                        -> BitwiseNot
                        -> MulticastSubject IncrementOffset
                        -> WorkflowOutput
                    -> SelectMany Offset++
                        SubscribeSubject IncrementOffset
                        -> Take(Count=1)
                        -> Bonsai.Scripting.Expressions.ExpressionTransform
                          Expression: it? 1.0 : -1.0
                        -> WorkflowOutput
                    -> MulticastSubject CurrentOffset
                    -> Take(Count=2)
                    -> Last
                    -> BooleanProperty(Value=false) => #35
                    #27, #35 -> Merge
                    -> BitwiseNot
                    -> Condition => #38
                        WorkflowInput Source1
                        -> WorkflowOutput
                    SubscribeSubject CurrentOptimum => #39
                    #38, #39 -> WithLatestFrom
                    -> MemberSelector(Selector=Item2) => #41
                    SubscribeSubject LoadCellIndex => #42
                    #41, #42 -> Zip
                    -> MemberSelector(Selector="Item1.Item1,Item1.Item2,Item2")
                    -> Take(Count=1)
                    -> WorkflowOutput

                    IntProperty(Value=-1000) => #47
                    IntProperty(Value=100000) => #48
                    #47, #48 -> Zip
                    -> BehaviorSubject CurrentOptimum

                    BooleanProperty(Value=true)
                    -> BehaviorSubject IncrementOffset
                -> Concat
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: new(Item1 as Offset, Item2 as Baseline, Item3 as LoadCellIndex)
                -> ToDictionary(KeySelector=LoadCellIndex, ElementSelector="")
                -> AsyncSubject CalibrationData

                SubscribeSubject CalibrationData
                -> Merge
                -> MemberSelector(Selector=Value) => #11
                -> MemberSelector(Selector=LoadCellIndex)
                -> Add(Operand=IntProperty(Value=48)) => #13
                #11 -> MemberSelector(Selector=Offset) => #14
                #13, #14 -> Zip
                -> InputMapping(Selector=Item2, Address(Selector=Item1))
                -> Bonsai.Harp.Format(MessageType=Write, Register=Bonsai.Harp.FormatMessagePayload(Address=48, PayloadType=S16))
                -> MulticastSubject HarpLoadCellsCommands
                -> Last => #19
                SubscribeSubject CalibrationData => #20
                #19, #20 -> WithLatestFrom
                -> WorkflowOutput
            -> BehaviorSubject LoadCellCalibration

        IncludeWorkflow(Path=Extensions\HarpBehaviorDevice.bonsai, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpLickometer.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpLicketySplitDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockGenerator.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpTimestampGeneratorGen3Device.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput.PortName)
        -> PropertyMapping(PortName)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.HarpUtils:HarpAnalogInputDevice.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment) => #13
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpAnalogInput)
        -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai) => #16
        #13, #16 -> SubscribeWhen

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=Calibration)
        -> MemberSelector(Selector=Input)
        -> AindForceForagingDataSchema.Rig.SerializeToJson
        -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>) => #23
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=PortName)
        -> PropertyMapping(PortName) => #27
        #23, #27 -> IncludeWorkflow(Path=Extensions\AindManipulator.bonsai, PortName=COMx, StartExperimentSubjectName=StartExperiment)

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockRepeaters)
        -> Merge
        -> CreateObservable CreateRepeaters
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject ThisHarp

            BehaviorSubject<Bonsai.Harp.HarpMessage> ThisHarpClockGenCommands => #3
            SubscribeSubject ThisHarp
            -> MemberSelector(Selector=PortName)
            -> PropertyMapping(PortName) => #6
            #3, #6 -> Harp.TimestampGeneratorGen3.Device(OperationMode=Active, OperationLed=On, DumpRegisters=true, VisualIndicators=On, Heartbeat=Enabled, IgnoreErrors=false, PortName=COMx)
            -> PublishSubject ThisHarpClockGenEvents

            SubscribeSubject ThisHarpClockGenEvents
            -> Harp.TimestampGeneratorGen3.Parse(Register=Harp.TimestampGeneratorGen3.RepeaterStatus)
            -> HasFlag(Operand=WorkflowProperty<Harp.TimestampGeneratorGen3.RepeaterFlags>(Value=Repeater))
            -> BehaviorSubject RepeaterRegisterStatus

            SubscribeSubject RepeaterRegisterStatus
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Harp.TimestampGeneratorGen3.CreateMessage(MessageType=Write, Payload=Harp.TimestampGeneratorGen3.CreateRepeaterStatusPayload(RepeaterStatus=Repeater))
            -> MulticastSubject ThisHarpClockGenCommands

            SubscribeSubject RepeaterRegisterStatus
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> WorkflowOutput
        -> Merge
        -> IntProperty(Value=1)
        -> Accumulate
        -> BehaviorSubject InstantiatedRepeaters

    GroupWorkflow Cameras
        GroupWorkflow TriggeredCameras
            SubscribeSubject RigSchema
            -> Take(Count=1)
            -> MemberSelector(Selector=TriggeredCameraController)
            -> AsyncSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.Value)
            -> AsyncSubject CameraFrameRate

            SubscribeSubject CameraFrameRate
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.Camera0Frequency)
            -> MulticastSubject HarpBehaviorCommands

            SubscribeSubject HarpBehaviorEvents
            -> Bonsai.Harp.FilterMessageType(FilterType=Include, MessageType=Event)
            -> Harp.Behavior.Parse(Register=Harp.Behavior.TimestampedCamera0Frame) => #11
            -> MemberSelector(Selector=Value)
            -> BitwiseAnd(Operand=WorkflowProperty<Harp.Behavior.FrameAcquired>(Value=FrameAcquired))
            -> GreaterThan(Operand=WorkflowProperty<System.Byte>(Value=0))
            -> Condition => #15
                WorkflowInput Source1
                -> WorkflowOutput
            #15, #11 -> WithLatestFrom
            -> MemberSelector(Selector=Item2.Seconds)
            -> PublishSubject FrameEvent

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera => #22
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                BooleanProperty(Value=true)
                -> MulticastSubject TriggeredCamerasInitialized
                -> Take(Count=1) => #5
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> PropertyMapping => #8
                  SerialNumber(Selector=SerialNumber)
                  ExposureTime(Selector=Exposure)
                  Gain(Selector=Gain)
                  Binning(Selector=Binning)
                  ColorProcessing(Selector=ColorProcessing)
                #5, #8 -> AllenNeuralDynamics.Core.AindSpinnakerCapture(Index=nil, ColorProcessing=Default, ExposureTime=19000, Gain=0, Binning=1, Gamma=nil, PixelFormat=Mono8, RegionOfInterest(X=0, Y=0, Width=0, Height=0)) => #9
                SubscribeSubject FrameEvent => #10
                #9, #10 -> Zip
                -> Bonsai.Harp.CreateTimestamped => #12
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #14
                #12, #14 -> WithLatestFrom
                -> WorkflowOutput
            Annotation SpinnakerApiNote(Text="For some reason, if you try to access the spinnaker API back to back, a threading error is emitted")
            -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT0.1S) => #24
            #22, #24 -> Zip
            -> MemberSelector(Selector=Item1)
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject TriggeredCamerasStream(BufferSize=nil)

            BehaviorSubject<System.Boolean> TriggeredCamerasInitialized
            -> IntProperty(Value=1)
            -> Accumulate => #32
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> MemberSelector(Selector=Count)
            -> PropertyMapping(Value) => #36
            #32, #36 -> GreaterThanOrEqual(Operand=IntProperty(Value=0))
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> Take(Count=1)
            -> Bonsai.Shaders.Delay(DueTime=PT0.1S)
            -> BehaviorSubject TriggeredCamerasReady

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable InstantiateCamera
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value)
                -> MemberSelector(Selector=Index)
                -> PropertyMapping(Index)
                -> Bonsai.Video.VideoCaptureDevice(Index=0, CaptureProperties="") => #7
                SubscribeSubject HarpTimestampSource => #8
                #7, #8 -> WithLatestFrom
                -> Bonsai.Harp.CreateTimestamped => #10
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> GroupBy(KeySelector=Item2, ElementSelector=Item1)
            -> ReplaySubject MonitoringCamerasStream(BufferSize=nil)
            -> WorkflowOutput

GroupWorkflow SessionSettings
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=RngSeed) => #1
    Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Bonsai.Numerics.Distributions.CreateContinuousUniform(Lower=0, Upper=10)
    -> Bonsai.Numerics.Distributions.Sample => #4
    #1, #4 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform CheckNull
      Expression: Item1.HasValue ? Item1.Value : Item2
    -> Take(Count=1)
    -> AsyncSubject RngSeedValue
    -> PropertyMapping(Seed)
    -> Bonsai.Numerics.CreateRandom(Seed=nil)
    -> Take(Count=1)
    -> AsyncSubject RngSeed

    AllenNeuralDynamics.VersionControl.CreateRepository(Path=../.)
    -> AsyncSubject Repository

    SubscribeSubject RigSchema
    -> MemberSelector(Selector=Screen.TextureAssetsDirectory)
    -> PropertyMapping(Value)
    -> PropertySource<Bonsai.IO.GetFiles,System.String>(MemberName=Path, Value=Textures)
    -> Take(Count=1)
    -> AsyncSubject TextureBankPath

    ExternalizedMapping(Value(DisplayName=FarClipHorizon))
    -> FloatProperty(Value=1000)
    -> Take(Count=1)
    -> AsyncSubject FarClipHorizon

    SubscribeSubject SubjectSchema
    -> PropertyMapping(Subject(Selector=Subject), RootFolder(Selector=RootPath), DateTimeOffset(Selector=Date))
    -> IncludeWorkflow
      Path=AllenNeuralDynamics.Core:GenerateRootLoggingPath.bonsai
      RootFolder=C:\data\
      Subject=672102
      DateTimeOffset=0001-01-01T00:00:00.0000000+00:00
      SubjectName=LoggingRootPath
    -> Take(Count=1)
    -> AsyncSubject CompoundRootPath

GroupWorkflow Initialization
    BehaviorSubject<System.Reactive.Unit> StartExperiment
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> SoftwareEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> UpdaterEvents
    BehaviorSubject<AllenNeuralDynamics.AindBehaviorServices.DataTypes.SoftwareEvent> RuntimeLogging
    BehaviorSubject<System.Reactive.Unit> EndExperiment
    BehaviorSubject<System.Reactive.Unit> StartLogging
    BehaviorSubject<System.String> Annotations

    IntProperty(Value=0)
    -> BehaviorSubject TrialNumber

    BooleanProperty(Value=false)
    -> BehaviorSubject LeftHasReward

    BooleanProperty(Value=false)
    -> BehaviorSubject RightHasReward

    BooleanProperty(Value=false)
    -> BehaviorSubject IsBaitedMode

    BooleanProperty(Value=false)
    -> Take(Count=1) => #16
    SubscribeSubject StartExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=true) => #19
    SubscribeSubject EndExperiment
    -> Take(Count=1)
    -> BooleanProperty(Value=false) => #22
    #16, #19, #22 -> Merge
    -> BehaviorSubject ExperimentState

    SubscribeSubject TrialNumber
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=TrialNumber)
    -> MulticastSubject SoftwareEvents

    SubscribeSubject LeftHasReward
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=LeftHasReward)
    -> MulticastSubject SoftwareEvents

    SubscribeSubject RightHasReward
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RightHasReward)
    -> MulticastSubject SoftwareEvents

    SubscribeSubject IsBaitedMode
    -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=IsBaitedMode)
    -> MulticastSubject SoftwareEvents

GroupWorkflow HardwareChecks
    GroupWorkflow ProtocolValidation => #0
        GroupWorkflow CameraChecks
            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable CheckDroppedFrames
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=FrameID)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Subtract(Operand=DoubleProperty(Value=1))
                -> GreaterThan(Operand=DoubleProperty(Value=0))
                -> Condition => #10
                    WorkflowInput Source1
                    -> WorkflowOutput
                SubscribeSubject InputSequence
                -> MemberSelector(Selector=Key) => #12
                #10, #12 -> WithLatestFrom
                -> MemberSelector(Selector=Item2)
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} dropped frame detected during pre-session!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!") => #5
            SubscribeSubject StartExperiment => #6
            #5, #6 -> TakeUntil

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge
            -> CreateObservable CheckCameraSettings
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject ThisCamera

                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Value.Exposure) => #4
                SubscribeSubject TriggeredCameraController
                -> MemberSelector(Selector=FrameRate)
                -> MemberSelector(Selector=Value) => #7
                #4, #7 -> Zip
                -> Bonsai.Scripting.Expressions.ExpressionTransform
                  Expression: ((1.0 / Item2) * 1000000) < double(Item1) + 1000
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> Take(Count=1) => #11
                SubscribeSubject ThisCamera
                -> MemberSelector(Selector=Key) => #13
                #11, #13 -> WithLatestFrom
                -> WorkflowOutput
            -> Merge
            -> Format(Format="Camera {0} exposure setting not compatible with requested frame rate!", Selector=it)
            -> InputMapping(Selector=it, Message(Selector=it))
            -> AllenNeuralDynamics.Core.ThrowException(Message="Dropped frame detected during pre-session!")

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=FrameRate.HasValue)
            -> BitwiseNot
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> AllenNeuralDynamics.Core.ThrowException(Message="TriggeredCameraControl must specify a valid FrameRate property!")

            SubscribeSubject TriggeredCamerasStream
            -> CreateObservable OnlineQC
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject InputSequence

                SubscribeSubject InputSequence
                -> Merge => #4
                -> MemberSelector(Selector=Value.ChunkData)
                -> MemberSelector(Selector=Timestamp)
                -> Bonsai.Dsp.Difference(Order=1)
                -> Multiply(Operand=DoubleProperty(Value=1E-09)) => #8
                #4 -> MemberSelector(Selector=Seconds)
                -> Bonsai.Dsp.Difference(Order=1) => #10
                #8, #10 -> Zip
                -> Subtract
                -> Bonsai.Dsp.Abs => #13
                ExternalizedMapping(Value(DisplayName=JitterThreshold)) => #14
                #13, #14 -> GreaterThan(Operand=DoubleProperty(Value=0.0005))
                -> Condition
                    WorkflowInput Source1
                    -> WorkflowOutput
                -> ObserveOn(Scheduler=TaskPoolScheduler) => #17
                ExternalizedMapping(Period(DisplayName=SnoozeTime))
                -> Bonsai.Shaders.Timer(DueTime=PT0S, Period=PT10S) => #19
                #17, #19 -> Gate
                -> SelectMany MakeUI
                    SubscribeSubject InputSequence
                    -> MemberSelector(Selector=Key)
                    -> Format(Format="Camera {0} out-of-alignment qc was triggered.", Selector=it)
                    -> InputMapping(Text(Selector=it))
                    -> AllenNeuralDynamics.Core.Design.MessageBox(Text="", Title=Warning, MessageBoxIcon=Exclamation)
            -> Merge

        SubscribeSubject InstantiatedRepeaters => #1
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=HarpClockRepeaters.Count) => #3
        #1, #3 -> Zip => #4
        SubscribeSubject StartExperiment => #5
        #4, #5 -> SubscribeWhen => #6
        -> Equal
        -> BitwiseNot => #8
        #8, #6 -> Zip
        -> Condition
            WorkflowInput Source1
            -> MemberSelector(Selector=Item1)
            -> WorkflowOutput
        -> MemberSelector(Selector=Item2)
        -> Format(Format="Unexpected number of instantiated Harp Clock Generators. Expected: {1}, got: {0}", Selector="Item1,Item2")
        -> InputMapping(Selector=it, Message(Selector=it))
        -> AllenNeuralDynamics.Core.ThrowException(Message="")
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=SkipHardwareValidation)
    -> BitwiseNot
    -> Condition => #4
        WorkflowInput Source1
        -> WorkflowOutput
    #0, #4 -> SubscribeWhen
    -> Bonsai.Shaders.DelaySubscription(DueTime=PT2S)
    -> WorkflowOutput

    SubscribeSubject Repository
    -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
    -> BitwiseNot => #10
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=AllowDirtyRepo) => #12
    #10, #12 -> Zip
    -> Bonsai.Scripting.Expressions.ExpressionTransform AllowDirty?
      Expression: Item2 ? False : Item1
    -> Condition
        WorkflowInput Source1
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.ThrowException(Message="Repository is not clean! Please discard all local changes.")

GroupWorkflow VariableUpdaters
    SubscribeSubject TaskLogicParameters
    -> MemberSelector(Selector=Updaters)
    -> Take(Count=1)
    -> AsyncSubject VariableUpdaters

GroupWorkflow OperationControl
    BehaviorSubject<System.Reactive.Unit> TriggerStartCue
    BehaviorSubject<System.Reactive.Unit> TriggerGoCue
    BehaviorSubject<System.Boolean> TriggerFeedbackCue

    GroupWorkflow RewardControl
        GroupWorkflow WaterValve
            BehaviorSubject<System.Double> ValveOpenTimeMs
            -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseSupplyPort0)
            -> MulticastSubject HarpBehaviorCommands

            BehaviorSubject<System.Reactive.Unit> TriggerValve
            -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateOutputSetPayload(OutputSet=SupplyPort0))
            -> MulticastSubject HarpBehaviorCommands
            -> WorkflowOutput

        BonVision.OptionalFloatProperty(Value=0, HasValue=true)
        -> Take(Count=1)
        -> BehaviorSubject GiveReward

        SubscribeSubject GiveReward
        -> PublishSubject HotGiveReward

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value)
        -> Condition GreaterThan0 => #9
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Calibration.WaterValve)
        -> MemberSelector(Selector=Output) => #12
        #9, #12 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform RewardToTime => #14
          Expression: ((Item1 * 0.001) - Item2.Offset) / Item2.Slope
        Annotation ToMilliseconds(Text="") => #15
        #14, #15 -> Multiply(Operand=DoubleProperty(Value=1000))
        -> InputMapping(Value(Selector=it))
        -> IntProperty(Value=0)
        -> Condition GreaterThan0
            WorkflowInput Source1
            -> GreaterThan(Operand=IntProperty(Value=0))
            -> WorkflowOutput
        -> MulticastSubject ValveOpenTimeMs
        -> Unit
        -> MulticastSubject TriggerValve

        SubscribeSubject GiveReward
        -> Condition HasValue
            WorkflowInput Source1
            -> MemberSelector(Selector=HasValue)
            -> WorkflowOutput
        -> MemberSelector(Selector=Value) => #25
        FloatProperty(Value=0) => #26
        #25, #26 -> Merge
        -> Accumulate
        -> BehaviorSubject SessionAccumulatedReward

        SubscribeSubject GiveReward
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=GiveReward)
        -> MulticastSubject SoftwareEvents

    GroupWorkflow LickometerControl
        SubscribeSubject HarpLickometerEvents
        -> AllenNeuralDynamics.LicketySplit.Parse(Register=AllenNeuralDynamics.LicketySplit.TimestampedLickState) => #1
        -> MemberSelector(Selector=Value)
        -> HasFlag(Operand=WorkflowProperty<AllenNeuralDynamics.LicketySplit.LickChannels>(Value=Channel0))
        -> DistinctUntilChanged
        -> Condition => #5
            WorkflowInput Source1
            -> WorkflowOutput
        #5, #1 -> WithLatestFrom
        -> MemberSelector(Selector=Item2.Seconds)
        -> PublishSubject LickEvent

    GroupWorkflow CameraControl
        SubscribeSubject HarpBehaviorHeartBeat
        -> Take(Count=1) => #1
        SubscribeSubject TextureBank => #2
        SubscribeSubject TriggeredCamerasReady => #3
        #1, #2, #3 -> Zip
        -> Take(Count=1)
        -> Bonsai.Shaders.Delay(DueTime=PT2S)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        BehaviorSubject<System.Boolean> CameraState => #9
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStartCamerasPayload(StartCameras=CameraOutput0)) => #11
        #9 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreateStopCamerasPayload(StopCameras=CameraOutput0)) => #14
        #11, #14 -> Merge
        -> MulticastSubject HarpBehaviorCommands

        SubscribeSubject StartLogging
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

        SubscribeSubject StartExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=true)
        -> MulticastSubject CameraState

        SubscribeSubject EndExperiment
        -> Take(Count=1)
        -> BooleanProperty(Value=false)
        -> MulticastSubject CameraState

    GroupWorkflow AudioControl
        BehaviorSubject<System.Double> AudioDuration
        -> Multiply(Operand=IntProperty(Value=1000))
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PulseDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Int32> AudioFrequency
        -> Harp.Behavior.Format(MessageType=Write, Register=Harp.Behavior.PwmFrequencyDO2)
        -> MulticastSubject HarpBehaviorCommands

        BehaviorSubject<System.Reactive.Unit> AudioTrigger
        -> Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStartPayload(PwmStart=PwmDO2))
        -> MulticastSubject HarpBehaviorCommands

        GroupWorkflow InitialSettings => #10
            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmDutyCycleDO2Payload(PwmDutyCycleDO2=1))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands

            Harp.Behavior.CreateMessage(MessageType=Write, Payload=Harp.Behavior.CreatePwmStopPayload(PwmStop=PwmDO2))
            -> Take(Count=1)
            -> MulticastSubject HarpBehaviorCommands
        SubscribeSubject HarpBehaviorEvents
        -> Take(Count=1) => #12
        #10, #12 -> SubscribeWhen

    GroupWorkflow LoadCells
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl)
        -> MemberSelector(Selector=Force)
        -> Take(Count=1)
        -> AsyncSubject ForceOperationControl

        SubscribeSubject ForceOperationControl
        -> CreateObservable ParseForce
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject settings

            SubscribeSubject HarpLoadCellsEvents
            -> Harp.LoadCells.FilterRegister(FilterType=Include, Register=Harp.LoadCells.LoadCellData)
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=TimestampedS16, IsArray=true)) => #5
            SubscribeSubject settings
            -> PropertyMapping(ForceOperationControl) => #7
            SubscribeSubject LUT
            -> PropertyMapping(LookUpTable) => #9
            #5, #7, #9 -> ParseForce => #10
            GroupWorkflow WaitForImageLoading
                SubscribeSubject LUT
                -> IntProperty(Value=0) => #1
                SubscribeSubject settings
                -> MemberSelector(Selector=ForceLookupTable)
                -> IncludeWorkflow(Path=Extensions\IsNull.bonsai)
                -> IntProperty(Value=0) => #5
                #1, #5 -> Merge
                -> WorkflowOutput
            -> Take(Count=1) => #12
            #10, #12 -> SubscribeWhen
            -> WorkflowOutput

            SubscribeSubject settings
            -> MemberSelector(Selector=ForceLookupTable)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> SelectMany LoadImage => #18
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject this

                SubscribeSubject this
                -> MemberSelector(Selector=Path)
                -> PropertyMapping(FileName)
                -> Bonsai.Vision.LoadImage(Mode=Unchanged)
                -> MulticastSubject CurrentForceLut
                -> Bonsai.Dsp.ConvertToMat
                -> WorkflowOutput
            SubscribeSubject settings
            -> MemberSelector(Selector=ForceLookupTable)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> PropertyMapping(Scale(Selector=Scale), Shift(Selector=Offset)) => #22
            #18, #22 -> Bonsai.Dsp.ConvertScale(Depth=nil, Scale=1, Shift=0)
            -> Take(Count=1)
            -> AsyncSubject LUT
        -> Switch
        -> PublishSubject CurrentForce

        BehaviorSubject<OpenCV.Net.Mat> CurrentForceLut

    GroupWorkflow ContinuousFeedback
        BooleanProperty(Value=false)
        -> Take(Count=1)
        -> BehaviorSubject ContinuousFeedbackEnabled

        AindForceForagingDataSchema.TaskLogic.ContinuousFeedback => #3
        IntProperty(Value=0)
        -> CreateObservable => #5
            DoubleProperty(Value=0)
            -> WorkflowOutput
        #3, #5 -> Zip
        -> IgnoreElements
        -> BehaviorSubject ContinuousFeedbackProcess

        SubscribeSubject ContinuousFeedbackProcess
        -> MemberSelector(Selector=Item1)
        -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ContinuousFeedbackProcess)
        -> MulticastSubject SoftwareEvents

        SubscribeSubject ContinuousFeedbackProcess => #13
        -> MemberSelector(Selector=Item1)
        -> AindForceForagingDataSchema.TaskLogic.MatchContinuousFeedback(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.ManipulatorFeedback>) => #15
        #13 -> MemberSelector(Selector=Item2) => #16
        #15, #16 -> WithLatestFrom
        -> CreateObservable ContinuousFeedbackMotorSolver
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject thisFeedback

            SubscribeSubject thisFeedback
            -> MemberSelector(Selector=Item1)
            -> AsyncSubject deviceFeedback

            SubscribeSubject thisFeedback
            -> MemberSelector(Selector=Item2)
            -> AsyncSubject feedbackSource

            SubscribeSubject feedbackSource => #9
            SubscribeSubject deviceFeedback => #10
            -> MemberSelector(Selector=ConverterLutInput) => #11
            #10 -> MemberSelector(Selector=ConverterLutOutput) => #12
            #9, #11, #12 -> IncludeWorkflow(Path=Extensions\InterpolateContinuousFeedback.bonsai)
            -> PublishSubject interpolatedFeedback

            SubscribeSubject interpolatedFeedback
            -> MulticastSubject SpoutPosition => #16
            SubscribeSubject ContinuousFeedbackEnabled
            -> Condition
                WorkflowInput Source1
                -> BitwiseNot
                -> WorkflowOutput
            -> BehaviorSubject endFeedback => #19
            #16, #19 -> TakeUntil

            SubscribeSubject endFeedback => #21
            SubscribeSubject interpolatedFeedback => #22
            #21, #22 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> MulticastSubject SpoutPosition
            -> Take(Count=1)
            -> WorkflowOutput
        -> Switch

    GroupWorkflow SpoutControl
        SubscribeSubject SpoutPosition
        -> WorkflowOutput

        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=AdditionalSettings)
        -> MemberSelector(Selector=SpoutAxis)
        -> InputMapping(Value(Selector=value__))
        -> PropertySource<AllenNeuralDynamics.AindManipulator.AxisConfiguration,AllenNeuralDynamics.AindManipulator.Axis>(MemberName=Axis, Value=None) => #7
        BehaviorSubject<System.Single> SpoutPosition => #8
        Bonsai.Shaders.UpdateFrame
        -> Slice(Start=0, Step=2, Stop=nil) => #10
        #8, #10 -> Gate
        -> DistinctUntilChanged
        -> Bonsai.Scripting.Expressions.ExpressionTransform "double(it)" => #13
          Expression: double(it)
        #7, #13 -> CombineLatest => #14
        GroupWorkflow GetCalibration
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=Manipulator)
            -> MemberSelector(Selector=Calibration)
            -> MemberSelector(Selector=Input)
            -> AindForceForagingDataSchema.Rig.SerializeToJson
            -> AllenNeuralDynamics.AindManipulator.DeserializeFromJson(Type=TypeMapping<AllenNeuralDynamics.AindManipulator.AindManipulatorCalibrationInput>)
            -> WorkflowOutput
        -> PropertyMapping(Calibration) => #16
        #14, #16 -> AllenNeuralDynamics.AindManipulator.ManipulatorSiUnitConverter(ConverterMode=MmToStep) => #17
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=Manipulator)
        -> MemberSelector(Selector=AdditionalSettings)
        -> MemberSelector(Selector=SpoutAxis)
        -> PropertyMapping(Axis) => #22
        #17, #22 -> MoveAbsoluteSingleAxis(Axis=Y1, MessageType=Write)
        -> MulticastSubject StepperDriverCommands

        BehaviorSubject<System.Boolean> ForceSpoutAvailability => #25
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Spout) => #27
        #25, #27 -> WithLatestFrom
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: Item1 ? Item2.DefaultExtendedPosition : Item2.DefaultRetractedPosition
        -> MulticastSubject SpoutPosition => #30
        SubscribeSubject TaskLogicParameters
        -> MemberSelector(Selector=OperationControl.Spout)
        -> MemberSelector(Selector=Enabled)
        -> Condition => #34
            WorkflowInput Source1
            -> WorkflowOutput
        #30, #34 -> SubscribeWhen

Defer TaskLogic => #10
    SubscribeSubject TaskLogicParameters
    -> GroupWorkflow PermutateBlocks
        WorkflowInput Source1
        -> MemberSelector(Selector=Environment) => #1
        -> Condition Shuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #4
        SubscribeSubject RngSeed => #5
        #4, #5 -> Bonsai.Numerics.Permutation => #6
        #1 -> Condition DontShuffle
            WorkflowInput Source1
            -> MemberSelector(Selector=Shuffle)
            -> BitwiseNot
            -> WorkflowOutput
        -> MemberSelector(Selector=BlockStatistics)
        -> Merge => #9
        #6, #9 -> Merge
        -> ToList
        -> WorkflowOutput
    -> AsyncSubject BlockStatistics

    IntProperty(Value=0)
    -> Take(Count=1)
    -> BehaviorSubject BlockIndex

    GroupWorkflow BlockSwitchLogic
        SubscribeSubject IsBaitedMode
        -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> MulticastSubject LeftHasReward => #3
        Annotation Reset(Text="Ensure no reward is available if the Baited mode is changed") => #4
        #3, #4 -> MulticastSubject RightHasReward

        SubscribeSubject ActiveBlock => #6
        SubscribeSubject CurrentForce
        -> MemberSelector(Selector=Seconds) => #8
        #6, #8 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> BehaviorSubject BlockEntryTime

    SubscribeSubject BlockStatistics => #7
    SubscribeSubject BlockIndex
    -> PropertyMapping(Value) => #9
    #7, #9 -> Index(Operand=IntProperty(Value=0))
    -> Take(Count=1)
    -> BehaviorSubject ActiveBlock
    -> IncludeWorkflow(Path=Extensions\CreateSoftwareEventInline.bonsai, EventName="") => #13
    -> AindForceForagingDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.Block>)
    -> SelectMany CreateBlock => #15
        WorkflowInput Source1
        -> AsyncSubject ThisBlock

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=Trials)
        -> Merge
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> SelectMany TrialNumber++
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        -> Last
        -> WorkflowOutput
    #13 -> AindForceForagingDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.BlockGenerator>)
    -> SelectMany CreateBlockGenerator => #17
        WorkflowInput Source1
        -> AsyncSubject ThisBlock
        -> MemberSelector(Selector=TrialStatistics)
        -> AsyncSubject TrialBlueprint

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=BlockSize) => #5
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #7
        #5, #7 -> AindForceForagingDataSchema.TaskLogic.SampleDistribution
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
          Expression: Convert.ToInt32(it)
        -> AsyncSubject BlockLength

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject TrialBlueprint
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Concat
        -> SelectMany TrialNumber++ => #17
            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber
            -> WorkflowOutput
        SubscribeSubject BlockLength
        -> PropertyMapping(Count) => #19
        #17, #19 -> RepeatCount(Count=0)
        -> Last
        -> WorkflowOutput
    #13 -> AindForceForagingDataSchema.TaskLogic.MatchBlockStatistics(Type=TypeMapping<AindForceForagingDataSchema.TaskLogic.BrownianRandomWalk>)
    -> SelectMany CreateRandomWalk => #19
        WorkflowInput Source1
        -> AsyncSubject ThisBlock
        -> MemberSelector(Selector=TrialStatistics)
        -> AsyncSubject TrialBlueprint
        -> BehaviorSubject CurrentTrial

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=BlockSize) => #6
        SubscribeSubject RngSeed
        -> PropertyMapping(RandomSource) => #8
        #6, #8 -> AindForceForagingDataSchema.TaskLogic.SampleDistribution
        -> Bonsai.Scripting.Expressions.ExpressionTransform ToInt32
          Expression: Convert.ToInt32(it)
        -> AsyncSubject BlockLength

        SubscribeSubject ThisBlock
        -> MemberSelector(Selector=IsBaited)
        -> MulticastSubject IsBaitedMode

        SubscribeSubject CurrentTrial
        -> Take(Count=1)
        -> IncludeWorkflow(Path=Extensions\CreateTrial.bonsai)
        -> Merge
        -> SelectMany UpdateNextTrial => #19
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject TrialOutcome

            SubscribeSubject TrialNumber
            -> Take(Count=1)
            -> Add(Operand=IntProperty(Value=1))
            -> MulticastSubject TrialNumber

            SubscribeSubject CurrentTrial
            -> MemberSelector(Selector=RightHarvest)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> IncludeWorkflow(Path=Extensions\UpdateAction.bonsai)
            -> AsyncSubject RightAction

            SubscribeSubject CurrentTrial
            -> MemberSelector(Selector=LeftHarvest)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> IncludeWorkflow(Path=Extensions\UpdateAction.bonsai)
            -> AsyncSubject LeftAction

            SubscribeSubject LeftAction => #17
            SubscribeSubject RightAction => #18
            #17, #18 -> Zip
            -> LastOrDefault => #20
            SubscribeSubject CurrentTrial
            -> PropertyMapping => #22
              InterTrialInterval(Selector=InterTrialInterval)
              QuiescencePeriod(Selector=QuiescencePeriod)
              InitiationPeriod(Selector=InitiationPeriod)
              ResponsePeriod(Selector=ResponsePeriod)
            SubscribeSubject LeftAction
            -> PropertyMapping(LeftHarvest) => #24
            SubscribeSubject RightAction
            -> PropertyMapping(RightHarvest) => #26
            #20, #22, #24, #26 -> AindForceForagingDataSchema.TaskLogic.Trial(InterTrialInterval=0)
            -> Take(Count=1)
            -> MulticastSubject CurrentTrial => #29
            SubscribeSubject TrialNumber => #30
            #29, #30 -> WithLatestFrom
            -> MemberSelector(Selector=Item2)
            -> WorkflowOutput
        SubscribeSubject BlockLength
        -> PropertyMapping(Count) => #21
        #19, #21 -> RepeatCount(Count=0)
        -> Last
        -> WorkflowOutput
    #15, #17, #19 -> Merge
    -> Last
    -> SelectMany BlockIndex++
        SubscribeSubject BlockIndex
        -> Take(Count=1)
        -> Add(Operand=IntProperty(Value=1))
        -> MulticastSubject BlockIndex
        -> WorkflowOutput
    -> Repeat
    -> TakeWhile
        SubscribeSubject BlockIndex
        -> Add(Operand=IntProperty(Value=1)) => #1
        SubscribeSubject BlockStatistics
        -> MemberSelector(Selector=Count) => #3
        #1, #3 -> CombineLatest
        -> LessThanOrEqual
        -> WorkflowOutput
    -> WorkflowOutput
SubscribeSubject EndExperiment => #11
#10, #11 -> TakeUntil => #12
SubscribeSubject StartExperiment => #13
Annotation TODO(Text="Consider automatically ending session when trials finish") => #14
#12, #13, #14 -> SubscribeWhen

Defer Logging => #16
    Defer Behavior
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Behavior)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow HarpLogging
            SubscribeSubject HarpBehaviorEvents => #0
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #2
            #0, #2 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Behavior, HarpDeviceName=Behavior)

            SubscribeSubject HarpAnalogInputEvents => #4
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #6
            #4, #6 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=AnalogInput, HarpDeviceName=AnalogInput)

            SubscribeSubject HarpLoadCellsEvents => #8
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #10
            #8, #10 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=LoadCells, HarpDeviceName=LoadCells)

            SubscribeSubject HarpLickometerEvents => #12
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #14
            #12, #14 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, DeviceName=Lickometer, HarpDeviceName=LicketySplit)

            SubscribeSubject HarpClockGenEvents => #16
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #18
            #16, #18 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

            SubscribeSubject StepperDriverEvents => #20
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #22
            #20, #22 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=StepperDriver
              HarpDeviceName=StepperDriver

        GroupWorkflow HarpCommandsLogging
            SubscribeSubject HarpTimestampSource
            -> Bonsai.Harp.Parse(Register=Bonsai.Harp.ParseMessagePayload(PayloadType=Timestamp, IsArray=false))
            -> BehaviorSubject HarpSeconds

            SubscribeSubject HarpBehaviorCommands => #3
            SubscribeSubject HarpSeconds => #4
            #3, #4 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/Behavior
              HarpDeviceName=Behavior

            SubscribeSubject StepperDriverCommands => #10
            SubscribeSubject HarpSeconds => #11
            #10, #11 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #13
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #15
            #13, #15 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/StepperDriver
              HarpDeviceName=StepperDriver

            SubscribeSubject HarpLoadCellsCommands => #17
            SubscribeSubject HarpSeconds => #18
            #17, #18 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #20
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #22
            #20, #22 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/LoadCells
              HarpDeviceName=LoadCells

            SubscribeSubject HarpLickometerCommands => #24
            SubscribeSubject HarpSeconds => #25
            #24, #25 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #27
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #29
            #27, #29 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/Lickometer
              HarpDeviceName=LicketySplit

            SubscribeSubject HarpClockGenCommands => #31
            SubscribeSubject HarpSeconds => #32
            #31, #32 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #34
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #36
            #34, #36 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/ClockGenerator
              HarpDeviceName=TimestampGeneratorGen3

            SubscribeSubject HarpAnalogInputCommands => #38
            SubscribeSubject HarpSeconds => #39
            #38, #39 -> WithLatestFrom
            -> AllenNeuralDynamics.HarpUtils.ModifyMessage(Address=nil, MessageTypeModified=nil) => #41
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #43
            #41, #43 -> IncludeWorkflow
              Path=AllenNeuralDynamics.Core:LogHarpDevice.bonsai
              SubjectName=LoggingRootPath
              Modality=Behavior
              DeviceName=HarpCommands/AnalogInput
              HarpDeviceName=AnalogInput

        GroupWorkflow Render
            SubscribeSubject RendererSynchState
            -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #1
              Expression:
                new(
                it.FrameIndex.Value as FrameIndex,
                it.FrameTimestamp.Value as FrameTimestamp,
                it.SyncQuadValue.Value as SyncQuadValue)
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=RendererSynchState, DeviceName=Renderer)

        GroupWorkflow SoftwareEvents
            SubscribeSubject SoftwareEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #1
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #3
            #1, #3 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #5
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #7
            #5, #7 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #10
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #12
            #10, #12 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=SoftwareEvents, SubjectName=LoggingRootPath, Modality=nil)
            -> WorkflowOutput

            SubscribeSubject UpdaterEvents
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #16
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #20
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #22
            #20, #22 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #25
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #27
            #25, #27 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=UpdaterEvents, SubjectName=LoggingRootPath, Modality=nil)

            SubscribeSubject Annotations
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=Annotations)
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #31
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #33
            #31, #33 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #35
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #37
            #35, #37 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #40
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #42
            #40, #42 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=Annotations, SubjectName=LoggingRootPath, Modality=nil)

            GroupWorkflow Metadata
                SubscribeSubject Repository
                -> AllenNeuralDynamics.VersionControl.IsRepositoryClean(IgnoreUntracked=false)
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RepositoryStatus)
                -> MulticastSubject SoftwareEvents

                SubscribeSubject RngSeedValue
                -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=RngSeed)
                -> MulticastSubject SoftwareEvents

        Defer OperationControl
            StringProperty(Value=OperationControl)
            -> Take(Count=1)
            -> AsyncSubject deviceName

            SubscribeSubject CurrentForceLut => #3
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #5
            SubscribeSubject deviceName
            -> PropertyMapping(DeviceName) => #7
            #3, #5, #7 -> IncludeWorkflow(Path=Extensions\LogImage.bonsai, SubjectName=LoggingRootPath, Modality=nil, LogName=ForceLut, DeviceName="")

            SubscribeSubject CurrentForce
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogCsv.bonsai, SubjectName=LoggingRootPath, Modality=Behavior, LogName=nil, DeviceName=CurrentForce)

    Defer BehaviorVideos
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=BehaviorVideos)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow TriggeredCameras
            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #2
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterFfmpeg>) => #5
            #2 -> MemberSelector(Selector=Key) => #6
            #5, #6 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Value.ChunkData.FrameID as CameraFrameNumber,
                    Value.ChunkData.Timestamp as CameraFrameTime,
                    Value.Image as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FrameRate(Selector=FrameRate), OutputArguments(Selector=OutputArguments)) => #31
                #27, #29, #31 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject TriggeredCameraController
            -> MemberSelector(Selector=Cameras)
            -> Merge => #12
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterOpenCv>) => #15
            #12 -> MemberSelector(Selector=Key) => #16
            #15, #16 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject TriggeredCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Value.ChunkData.FrameID as CameraFrameNumber,
                    Value.ChunkData.Timestamp as CameraFrameTime,
                    Value.Image as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FourCC(Selector=FourCc), FrameRate(Selector=FrameRate)) => #31
                #27, #29, #31 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

        GroupWorkflow MonitoringCameras
            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #4
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterFfmpeg>) => #7
            #4 -> MemberSelector(Selector=Key) => #8
            #7, #8 -> WithLatestFrom
            -> CreateObservable FfmpegWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Single.NaN as CameraFrameNumber,
                    Single.NaN as CameraFrameTime,
                    Value as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FrameRate(Selector=FrameRate), OutputArguments(Selector=OutputArguments)) => #31
                #27, #29, #31 -> AllenNeuralDynamics.Core.FfmpegVideoWriter(Overwrite=false, FrameRate=0)
            -> Merge

            SubscribeSubject RigSchema
            -> MemberSelector(Selector=MonitoringCameraController)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> MemberSelector(Selector=Cameras)
            -> Merge => #16
            -> MemberSelector(Selector=Value.VideoWriter)
            -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:FilterNotNull.bonsai)
            -> AindForceForagingDataSchema.Rig.MatchVideoWriter(Type=TypeMapping<AindForceForagingDataSchema.Rig.VideoWriterOpenCv>) => #19
            #16 -> MemberSelector(Selector=Key) => #20
            #19, #20 -> WithLatestFrom
            -> CreateObservable OpenCvWriter
                WorkflowInput Source1
                -> Take(Count=1)
                -> AsyncSubject This

                SubscribeSubject This
                -> MemberSelector(Selector=Item2)
                -> AsyncSubject ThisCameraName

                SubscribeSubject This
                -> MemberSelector(Selector=Item1)
                -> AsyncSubject ThisWriter

                SubscribeSubject ThisCameraName
                -> PropertyMapping(LogName) => #10
                SubscribeSubject ThisWriter
                -> MemberSelector(Selector=ContainerExtension)
                -> PropertyMapping(VideoExtension) => #13
                SubscribeSubject Modality
                -> PropertyMapping(Modality) => #15
                #10, #13, #15 -> IncludeWorkflow
                  Path=AllenNeuralDynamics.Core:GenerateSpinnakerLoggingPath.bonsai
                  SubjectName=LoggingRootPath
                  Modality=BehaviorVideos
                  LogName=FaceCamera
                  VideoExtension=mp4
                -> AsyncSubject CameraLoggerPath

                SubscribeSubject MonitoringCamerasStream
                -> Condition
                    WorkflowInput Source1
                    -> MemberSelector(Selector=Key) => #1
                    SubscribeSubject ThisCameraName
                    -> PropertyMapping(Value) => #3
                    #1, #3 -> Equal(Operand=StringProperty)
                    -> WorkflowOutput
                -> Take(Count=1)
                -> Merge
                -> Bonsai.Scripting.Expressions.ExpressionTransform Label => #22
                  Expression:
                    new(
                    Seconds as ReferenceTime,
                    Single.NaN as CameraFrameNumber,
                    Single.NaN as CameraFrameTime,
                    Value as Image)
                SubscribeSubject CameraLoggerPath
                -> MemberSelector(Selector=Metadata)
                -> PropertyMapping(FileName) => #25
                #22, #25 -> Bonsai.IO.CsvWriter(Append=false, Overwrite=false, Suffix=None, IncludeHeader=true, Selector="ReferenceTime,CameraFrameNumber,CameraFrameTime")
                -> MemberSelector(Selector=Image) => #27
                SubscribeSubject CameraLoggerPath
                -> PropertyMapping(FileName(Selector=Video)) => #29
                SubscribeSubject ThisWriter
                -> PropertyMapping(FourCC(Selector=FourCc), FrameRate(Selector=FrameRate)) => #31
                #27, #29, #31 -> Bonsai.Vision.VideoWriter(Suffix=None, Buffered=true, Overwrite=false, FourCC=FMP4, FrameRate=30, FrameSize(Width=0, Height=0), ResizeInterpolation=NearestNeighbor)
            -> Merge

    Defer Other
        ExternalizedMapping(Value(DisplayName=Modality))
        -> PropertySource<AllenNeuralDynamics.Core.AppendModalitySuffix,System.Nullable(AllenNeuralDynamics.Core.Modality)>(MemberName=Modality, Value=Other)
        -> Take(Count=1)
        -> AsyncSubject Modality

        GroupWorkflow ConfigSchemaLogging
            SubscribeSubject SubjectSchema
            -> AindForceForagingDataSchema.Session.SerializeToJson => #1
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #3
            #1, #3 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_output)

            SubscribeSubject TaskLogicSchema
            -> AindForceForagingDataSchema.TaskLogic.SerializeToJson => #6
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #8
            #6, #8 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_output)

            SubscribeSubject RigSchema
            -> AindForceForagingDataSchema.Rig.SerializeToJson => #11
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #13
            #11, #13 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_output)

            SubscribeSubject RawRigSchema => #15
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #17
            #15, #17 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=rig_input, Extension=json)

            SubscribeSubject RawSessionSchema => #19
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #21
            #19, #21 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=session_input, Extension=json)

            SubscribeSubject RawTaskLogicSchema => #23
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #25
            #23, #25 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogAllText.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName=Config, LogName=tasklogic_input, Extension=json)

        GroupWorkflow Logs
            SubscribeSubject EndExperiment
            -> StringProperty(Value=ExperimentCompleted)
            -> AllenNeuralDynamics.Core.CreateSoftwareEvent(EventName=ExperimentCompleted) => #2
            SubscribeSubject HarpTimestampSource => #3
            #2, #3 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent
            -> AllenNeuralDynamics.AindBehaviorServices.DataTypes.SerializeToJson => #7
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #9
            #7, #9 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogDataSchema.bonsai, SubjectName=LoggingRootPath, Modality=nil, DeviceName="", LogName=endsession)

            SubscribeSubject RuntimeLogging
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #12
            SubscribeSubject RendererSynchState
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #14
            #12, #14 -> WithLatestFrom
            -> AllenNeuralDynamics.Core.FramestampSoftwareEvent => #16
            SubscribeSubject HarpTimestampSource
            -> ObserveOn(Scheduler=TaskPoolScheduler) => #18
            #16, #18 -> WithLatestFrom
            -> Bonsai.Harp.CreateTimestamped
            -> AllenNeuralDynamics.Core.TimestampSoftwareEvent => #21
            SubscribeSubject Modality
            -> PropertyMapping(Modality) => #23
            #21, #23 -> IncludeWorkflow(Path=AllenNeuralDynamics.Core:LogSoftwareEventsDemux.bonsai, LoggerName=RuntimeLogging, SubjectName=LoggingRootPath, Modality=nil)
SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S) => #18
#16, #18 -> TakeUntil => #19
SubscribeSubject StartLogging => #20
#19, #20 -> SubscribeWhen

GroupWorkflow ControlUserInterface
    ExternalizedMapping(Value(DisplayName=EnableExperimentUI))
    -> BooleanProperty(Value=true)
    -> Take(Count=1)
    -> BehaviorSubject EnableExperimentUI

    IncludeWorkflow(Path=AllenNeuralDynamics.AindManipulator:AindManipulatorGui.bonsai)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    GroupWorkflow LauncherControl
        IncludeWorkflow(Path=Extensions\Annotation.bonsai)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #1
        SubscribeSubject ExperimentState
        -> BitwiseNot
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder Start(Enabled=true, Visible=true, Text="Start Experiment")
        -> PublishSubject StartExperimentToggleButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        Bonsai.Gui.ButtonBuilder End(Enabled=true, Visible=true, Text="End Experiment")
        -> PublishSubject EndExperimentButton
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #10
        #1, #7, #10 -> Bonsai.Gui.TableLayoutPanelBuilder LauncherControl
          Enabled=true
          Visible=true
          Font="Microsoft Sans Serif, 26pt"
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject StartExperimentToggleButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject StartExperimentShortcut

        SubscribeSubject EndExperimentButton
        -> Take(Count=1)
        -> Unit
        -> MulticastSubject EndExperiment => #20
        SubscribeSubject StartExperiment => #21
        #20, #21 -> SubscribeWhen
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #7
    GroupWorkflow ValveGui
        Bonsai.Gui.PropertyGridBuilder(Enabled=true, Visible=true, HelpVisible=true, ToolbarVisible=true, AutoRefresh=false)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.PropertyGridVisualizer>) => #1
        Bonsai.Gui.ButtonBuilder RunCalibration(Enabled=true, Visible=true, Text=RunCalibration)
        -> PublishSubject RunCalibration
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        BooleanProperty(Value=false)
        -> Take(Count=1) => #6
        SubscribeSubject ValveFlushState => #7
        #6, #7 -> Concat => #8
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Close Valves") => #10
        #8 -> BitwiseNot
        -> Condition
            WorkflowInput Source1
            -> WorkflowOutput
        -> StringProperty(Value="Open Valves") => #13
        #10, #13 -> Merge
        -> PropertyMapping(Text)
        -> Bonsai.Gui.ToggleButtonBuilder FlushValves(Enabled=true, Visible=true, Text="Open Valves", Checked=false)
        -> MulticastSubject ValveFlushState
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ToggleButtonVisualizer>) => #18
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled) => #20
        #1, #4, #18, #20 -> Bonsai.Gui.TableLayoutPanelBuilder ValveCalibration
          Enabled=true
          Visible=true
          ColumnCount=2
          RowCount=2
          ColumnStyles=""
          RowStyles=""
          CellSpans(CellSpan(ColumnSpan=1, RowSpan=2), CellSpan(ColumnSpan=1, RowSpan=1), CellSpan(ColumnSpan=1, RowSpan=1))
        -> WorkflowOutput

        SubscribeSubject RunCalibration
        -> Take(Count=1) => #24
        ExternalizedMapping(Interval(Category=ValveCalibration), OpeningTimeMs(Category=ValveCalibration), Repeats(Category=ValveCalibration)) => #25
        #24, #25 -> SelectMany LoopValve
            ExternalizedMapping(DueTime(DisplayName=Interval))
            -> Bonsai.Shaders.Timer(DueTime=PT0.5S) => #1
            ExternalizedMapping(Value(DisplayName=OpeningTimeMs)) => #2
            #1, #2 -> IntProperty(Value=100)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve => #6
            ExternalizedMapping(Count(DisplayName=Repeats)) => #7
            #6, #7 -> RepeatCount(Count=200) => #8
            Bonsai.Shaders.Input.KeyDown(Key=Q, Modifiers=Shift) => #9
            #8, #9 -> TakeUntil
            -> ElementIndex
            -> MemberSelector(Selector=Index)
            -> WorkflowOutput
        -> Repeat

        BehaviorSubject<System.Boolean> ValveFlushState
        -> CreateObservable Flush
            WorkflowInput Source1
            -> Condition
                WorkflowInput Source1
                -> WorkflowOutput
            -> IntProperty(Value=200)
            -> MulticastSubject ValveOpenTimeMs
            -> Unit
            -> MulticastSubject TriggerValve
            -> Bonsai.Shaders.Delay(DueTime=PT0.2S)
            -> RepeatCount(Count=20)
            -> LastOrDefault
            -> WorkflowOutput
        -> Switch
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #9
    GroupWorkflow HwShortcuts
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerAudio(Enabled=true, Visible=true, Text=TriggerAudio)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject AudioTrigger
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #4
        Bonsai.Gui.ButtonBuilder ForceReward(Enabled=true, Visible=true, Text=ForceReward)
        -> PublishSubject ForceReward
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #7
        SubscribeSubject EnableExperimentUI
        -> PropertyMapping(Enabled)
        -> Bonsai.Gui.ButtonBuilder TriggerLoadCellCalibration(Enabled=true, Visible=true, Text=TriggerLoadCellCalibration)
        -> Sink
            WorkflowInput Source1
            -> Unit
            -> MulticastSubject CalibrateLoadCells
            -> WorkflowOutput
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ButtonVisualizer>) => #12
        #4, #7, #12 -> Bonsai.Gui.TableLayoutPanelBuilder HwShortcuts(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 20pt", ColumnCount=5, RowCount=5, ColumnStyles="", RowStyles="", CellSpans="")
        -> WorkflowOutput

        SubscribeSubject ForceReward => #15
        Annotation DefaultRewardAmount(Text="")
        -> FloatProperty(Value=3)
        -> Take(Count=1) => #18
        #15, #18 -> WithLatestFrom
        -> MemberSelector(Selector=Item2)
        -> MulticastSubject GiveReward
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #11
    #5, #7, #9, #11 -> Bonsai.Gui.TabControlBuilder ControlUserInterface(Enabled=true, Visible=true, Font="Microsoft Sans Serif, 10pt")
    -> WorkflowOutput

    SubscribeSubject StartExperiment
    -> BooleanProperty(Value=false)
    -> MulticastSubject EnableExperimentUI

GroupWorkflow Visualizers
    SubscribeSubject CurrentForce
    -> Bonsai.Design.Visualizers.RollingGraphBuilder(IndexSelector=Seconds, ValueSelector="LeftForce,RightForce", SymbolType=None, LineWidth=1, Capacity=2000, Min=nil, Max=nil)
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Design.Visualizers.RollingGraphVisualizer>) => #2
    IntProperty(Value=0)
    -> Visualizer VideoControllerVisualization
        SubscribeSubject RigSchema
        -> MemberSelector(Selector=TriggeredCameraController)
        -> Bonsai.Scripting.Expressions.ExpressionTransform
          Expression: it != null ? (it.Cameras.Count > 0) : false
        -> AsyncSubject TriggeredCamerasControllerExists

        SubscribeSubject RigSchema => #4
        SubscribeSubject TriggeredCamerasControllerExists
        -> Condition => #6
            WorkflowInput Source1
            -> WorkflowOutput
        #4, #6 -> SubscribeWhen
        -> MemberSelector(Selector=TriggeredCameraController.Cameras.Keys)
        -> Bonsai.Dsp.ConvertToArray(Depth=nil)
        -> Bonsai.Gui.ListBoxDataSourceBuilder(Enabled=true, Visible=true, DisplayMember="")
        -> BehaviorSubject SelectedControllerCamera
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.ListBoxDataSourceVisualizer>) => #12
        SubscribeSubject SelectedControllerCamera
        -> CreateObservable GetStream
            WorkflowInput Source1
            -> Take(Count=1)
            -> AsyncSubject Camera

            SubscribeSubject TriggeredCamerasStream => #3
            SubscribeSubject Camera
            -> PropertyMapping(Value) => #5
            #3, #5 -> Condition
                WorkflowInput Source1
                -> MemberSelector(Selector=Key) => #1
                ExternalizedMapping(Value) => #2
                #1, #2 -> Equal(Operand=StringProperty)
                -> WorkflowOutput
            -> Merge
            -> WorkflowOutput
        -> Switch
        -> MemberSelector(Selector=Value.Image)
        -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Vision.Design.IplImageVisualizer>) => #17
        SubscribeSubject TriggeredCamerasControllerExists
        -> PropertyMapping(Enabled, Visible) => #19
        #12, #17, #19 -> Bonsai.Gui.TableLayoutPanelBuilder VideoVisualizer
          Enabled=true
          Visible=true
          ColumnCount=1
          RowCount=2
          ColumnStyles=""
          RowStyles(RowStyle(SizeType=Percent, Height=0.1), RowStyle(SizeType=Percent, Height=0.6), RowStyle(SizeType=Percent, Height=0.3))
          CellSpans=""
        -> WorkflowOutput
    -> VisualizerMapping(VisualizerType=TypeMapping<Bonsai.Gui.TableLayoutPanelVisualizer>) => #5
    #2, #5 -> Bonsai.Design.Visualizers.TableLayoutPanelBuilder DataVisualization(ColumnCount=1, RowCount=2, ColumnStyles="", RowStyles(RowStyle(SizeType=Percent, Height=0.33), RowStyle(SizeType=Percent, Height=0.67)), CellSpans="")
    -> WorkflowOutput

GroupWorkflow StartCondition
    BehaviorSubject<System.Reactive.Unit> StartExperimentShortcut => #0
    SubscribeSubject TextureBank => #1
    SubscribeSubject TriggeredCamerasReady => #2
    #0, #1, #2 -> Zip
    -> Take(Count=1)
    -> MemberSelector(Selector=Item1)
    -> MulticastSubject StartLogging => #6
    ExternalizedMapping(DueTime(DisplayName=LogDelay)) => #7
    #6, #7 -> Bonsai.Shaders.Delay(DueTime=PT3S)
    -> Bonsai.Shaders.SampleOnUpdateFrame
    -> MulticastSubject StartExperiment
    -> WorkflowOutput

SubscribeSubject EndExperiment
-> Bonsai.Shaders.Delay(DueTime=PT1S)
-> SelectMany EndRoutine
    SubscribeSubject LoggingRootPath
    -> PropertyMapping(Source) => #1
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    -> AllenNeuralDynamics.Core.StripDirectoryPath => #5
    SubscribeSubject CompoundRootPath
    -> MemberSelector(Selector=SessionPath) => #7
    #5, #7 -> Zip
    -> Format(Format={0}/{1}, Selector="Item1, Item2")
    -> PropertyMapping(Destination) => #10
    #1, #10 -> AllenNeuralDynamics.Core.StartRobocopy(CreateLog=true, Arguments="/E /DCOPY:DAT /R:100 /W:3 /tee", ProcessWindowStyle=Normal) => #11
    SubscribeSubject SubjectSchema
    -> MemberSelector(Selector=RemotePath)
    -> Condition NotNull => #14
        WorkflowInput Source1
        -> Bonsai.Scripting.Expressions.ExpressionTransform NullOrEmpty
          Expression: String.IsNullOrEmpty(it)
        -> BitwiseNot
        -> WorkflowOutput
    SubscribeSubject StartExperiment => #15
    #14, #15 -> Zip => #16
    #11, #16 -> SubscribeWhen
-> Bonsai.Shaders.Delay(DueTime=PT2S)
-> Take(Count=1)
-> WorkflowOutput
